PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo_project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine consent
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    TextComponent consent_text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        CONSENT TO PARTICIPATE IN A RESEARCH STUDY

        Study Title: Does Emotionally Arousing Content Slow Down Word Recall?
        Researcher: Saloni Chandra, Ahmedabad University (Psychology)

        1. Purpose
        To examine whether emotionally intense images slow down how quickly people recall words.

        2. Procedure
        Participation takes ~10 minutes. You will:
        a) View word–image pairs.
        b) Each pair will appear for 5 seconds.
        c) Complete a 45-second typing task at the end.

        3. Risks & Benefits
        Risks: Some images may be emotionally intense or mildly unpleasant. You may withdraw at any time.
        Benefits: You contribute to research on memory and emotion.

        4. Confidentiality
        Your participation is anonymous. Data will be stored securely with no identifying information.

        5. Voluntary Participation
        Participation is voluntary. You may stop at any time without penalty.

        ⸻

        By pressing ‘return’, you confirm that:
        • You are 18 or older.
        • You have read and understood this form.
        • You voluntarily agree to participate.

        Press ‘return’ to begin.
    KeyboardComponent consent_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_study
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    TextComponent study_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The memory task is about to begin. On each screen, you will see a word and an image. The screen will change automatically after 5 seconds. Do not press any keys during this phase.

        Press 'Space' to continue.
    KeyboardComponent study_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine study_trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent word_stim
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $study_word
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    ImageComponent image_stim
      image [set every repeat] = $images
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
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  Routine instructions_recall
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    TextComponent recall_instructions
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = The study phase is complete. The next screen is your Recall Test. You will have 45 seconds to type all the words you can remember from the list you just saw. Type them one after the other. Press the SPACE key to begin your 45-second test
      units = height
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    KeyboardComponent recall_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine recall_test
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    TextComponent recall_prompt
      letterHeight = 0.05
      pos = (0.0, 0.2)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 45.0
      text = Type the words you remember below:
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    TextboxComponent typed_response
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type in the words you remember
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45.0
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 45.0
      stopVal [duration (s)] = 3.0
      text = Thank you for your participation! The experiment is complete.
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Flow
  Routine consent
  Routine instructions_study
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book', 'images': 'images/neutral/bubble2.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'chair', 'images': 'images/neutral/Coffee1.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'table\xa0', 'images': 'images/neutral/Cottonswabs3.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'phone', 'images': 'images/neutral/Dessert2.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'bottle', 'images': 'images/neutral/Dog21.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'bag', 'images': 'images/neutral/Fence2.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'pen', 'images': 'images/neutral/Flowers6.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'laptop', 'images': 'images/neutral/Galaxy2.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'door', 'images': 'images/neutral/Grass2.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'window', 'images': 'images/neutral/Happyface1.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'fan ', 'images': 'images/neutral/Lake5.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'light ', 'images': 'images/neutral/Swingset1.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'clock', 'images': 'images/neutral/Wall5.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'shirt', 'images': 'images/neutral/Windmill1.jpg', 'Arousal': 'neutral\xa0'},
      {'study_word': 'shoes', 'images': 'images/high/Animalcarcass1.jpg', 'Arousal': 'high'},
      {'study_word': 'bus', 'images': 'images/high/Caraccident2.jpg', 'Arousal': 'high'}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
    Routine study_trial
  LoopTerminator trials
  Routine instructions_recall
  Routine recall_test
